<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
	xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
	xmlns:fn="http://www.w3.org/2005/xpath-functions"
	xmlns:fo="http://www.w3.org/1999/XSL/Format"
	xmlns:m="http://www.draeger.com/CTEM"
	xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
	xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
	xmlns:ps="http://schemas.microsoft.com/powershell/2004/04"
	xmlns:xs="http://www.w3.org/2001/XMLSchema"
	xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
	xsi:schemaLocation="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant BICEPS_ParticipantModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/message BICEPS_MessageModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/extension ExtensionPoint.xsd"
	SequenceId="urn:oid:1">
	<msg:Mdib SequenceId="urn:oid:1">
		<pm:MdDescription DescriptionVersion="0">
			<pm:Mds Handle="mds0" SafetyClassification="MedA">
				<pm:Type Code="130535"> <!-- 1:64.999 -->
						<pm:ConceptDescription Lang="en-US">not settable metrics</pm:ConceptDescription>
				</pm:Type>
				<pm:AlertSystem SafetyClassification="MedA" Handle="asy.mds0" SelfCheckPeriod="PT5S">
					<pm:AlertCondition Handle="ac0.mds0"
							xsi:type="pm:AlertConditionDescriptor"
							SafetyClassification="MedA" Kind="Phy" Priority="Me">
							<pm:Type Code="130536"> <!-- 3:65.500 -->
								<pm:ConceptDescription Lang="en-US">Brightness = 255 condition</pm:ConceptDescription>
							</pm:Type>
							<pm:Source>mds0</pm:Source>
					</pm:AlertCondition>
					<pm:AlertSignal Handle="as0.mds0" ConditionSignaled="ac0.mds0" Manifestation="Aud" Latching="false" SafetyClassification="MedA" />
				</pm:AlertSystem>
				<pm:Sco Handle="sco.mds0">
					<pm:Operation Handle="actop.mds0_sco_0"
						xsi:type="pm:ActivateOperationDescriptor"
						SafetyClassification="MedC" OperationTarget="mds0"
						MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
						<pm:Type Code="130537"> <!-- 2:65.207 -->
							<pm:ConceptDescription Lang="en-US">Activation</pm:ConceptDescription>
						</pm:Type>
					</pm:Operation>
				</pm:Sco>
				<pm:SystemContext Handle="SC.mds0">
					<pm:PatientContext Handle="PC.mds0" />
					<pm:LocationContext Handle="LC.mds0" />
				</pm:SystemContext>
				

				<pm:Vmd Handle="vmd1" SafetyClassification="MedA">
					<pm:Type Code="130538"> <!-- 1:65.200 -->
						<pm:ConceptDescription Lang="en-US">Vmd</pm:ConceptDescription>
					</pm:Type>
					<pm:Sco Handle="sco.vmd1.mds0">

						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric.ch0.vmd1_sco_0"
							OperationTarget="numeric.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130539"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Set effect index</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>

						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_palette.ch0.vmd1_sco_0"
							OperationTarget="numeric_palette.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130540"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Set the palette</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_brightness.ch0.vmd1_sco_0"
							OperationTarget="numeric_brightness.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130541"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set brightness value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Effect_Speed.ch0.vmd1_sco_0"
							OperationTarget="numeric_Effect_Speed.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130542"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Set the speed value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Effect_Intensity.ch0.vmd1_sco_0"
							OperationTarget="numeric_Effect_Intensity.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130543"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Set the intensity value value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Function_Selector.ch0.vmd1_sco_0"
							OperationTarget="numeric_Function_Selector.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130544"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Set operation</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						

						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="enumstring.ch0.vmd1_sco_0"
							OperationTarget="enumstring.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130545"> <!-- 2:65.205 -->
								<pm:ConceptDescription Lang="en-US">Set if the interruptor is on or off</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>

						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string.ch0.vmd1_sco_0"
							OperationTarget="string.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130546"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">set primary value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string_2.ch0.vmd1_sco_0"
							OperationTarget="string_2.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130547"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">Set secondary color value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string_3.ch0.vmd1_sco_0"
							OperationTarget="string_3.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="130548"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">Set third color value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						
					</pm:Sco>
					<!-- this is the channel grouping the settable metrics -->
					<pm:Channel Handle="ch0.vmd1"
						SafetyClassification="MedA">
						<pm:Type Code="130549"> <!-- 1:65.201 -->
							<pm:ConceptDescription Lang="en-US">settable metrics</pm:ConceptDescription>
						</pm:Type>
						<pm:Metric Handle="numeric.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130550"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Effect value</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130551"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Index</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="101" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="numeric_palette.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130552"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Color palette</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130553"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Index</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="46" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="numeric_brightness.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130554"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Brightness of the light</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130555"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Bits</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="numeric_Effect_Speed.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130556"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Speed effect value</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130557"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Bits</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>

						<pm:Metric Handle="numeric_Effect_Intensity.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130558"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Intensity of the light</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130559"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Bits</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="enumstring.ch0.vmd1"
							SafetyClassification="MedA"
							xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Set"
							MetricAvailability="Intr">
							<pm:Type Code="130560"> <!-- 2:65.203 -->
								<pm:ConceptDescription Lang="en-US">Value of the interruptor state (on or off)</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130561"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:AllowedValue>
								<pm:Value>ON</pm:Value>
								<pm:Type Code="130562">
									<pm:ConceptDescription Lang="en-US">ON</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
							<pm:AllowedValue>
								<pm:Value>OFF</pm:Value>
								<pm:Type Code="130563">
									<pm:ConceptDescription Lang="en-US">OFF</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
						</pm:Metric>

						<pm:Metric Handle="string.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="130564"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Primary color value</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130565"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">HEX/DEC</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="string_2.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="130566"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Secundary color value</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130567"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">HEX/DEC</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="string_3.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="130568"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">Third color value</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130569"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">HEX/DEC</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="numeric_Function_Selector.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="1">
							<pm:Type Code="130570"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">Function selector for the LED</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="130571"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">Index</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="7" Lower="0"
								StepWidth="1" />
						</pm:Metric>
					</pm:Channel>
				</pm:Vmd>
			</pm:Mds>
		</pm:MdDescription>
		<pm:MdState StateVersion="0" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
			<pm:State DescriptorHandle="enumstring.ch0.vmd1_sco_0" OperatingMode= "En" StateVersion="0" DescriptorVersion="0" xsi:type="pm:SetStringOperationState">
				<pm:AllowedValues>
					<pm:Value>ON</pm:Value>
					<pm:Value>OFF</pm:Value>
				</pm:AllowedValues>
			</pm:State>
		</pm:MdState>
	</msg:Mdib>
</msg:GetMdibResponse>