<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
	xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
	xmlns:fn="http://www.w3.org/2005/xpath-functions"
	xmlns:fo="http://www.w3.org/1999/XSL/Format"
	xmlns:m="http://www.draeger.com/CTEM"
	xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
	xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
	xmlns:ps="http://schemas.microsoft.com/powershell/2004/04"
	xmlns:xs="http://www.w3.org/2001/XMLSchema"
	xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
	xsi:schemaLocation="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant BICEPS_ParticipantModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/message BICEPS_MessageModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/extension ExtensionPoint.xsd"
	SequenceId="urn:oid:1">
	<msg:Mdib SequenceId="urn:oid:1">
		<pm:MdDescription>
			<pm:Mds Handle="mds0" SafetyClassification="MedA">
				<pm:Type Code="130535"> <!-- 1:64.999 -->
						<pm:ConceptDescription Lang="en-US">not settable metrics</pm:ConceptDescription>
				</pm:Type>

				<pm:Sco Handle="sco.mds0">
					<pm:Operation Handle="actop.mds0_sco_0"
						xsi:type="pm:ActivateOperationDescriptor"
						SafetyClassification="MedC" OperationTarget="mds0"
						MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
						<pm:Type Code="196279"> <!-- 2:65.207 -->
							<pm:ConceptDescription Lang="en-US">dummy activate operation</pm:ConceptDescription>
						</pm:Type>
					</pm:Operation>
				</pm:Sco>
				<pm:SystemContext Handle="SC.mds0">
					<pm:PatientContext Handle="PC.mds0" />
					<pm:LocationContext Handle="LC.mds0" />
				</pm:SystemContext>
				

				<pm:Vmd Handle="vmd1" SafetyClassification="MedA">
					<pm:Type Code="130736"> <!-- 1:65.200 -->
						<pm:ConceptDescription Lang="en-US">settable metrics</pm:ConceptDescription>
					</pm:Type>
					<pm:Sco Handle="sco.vmd1.mds0">

						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric.ch0.vmd1_sco_0"
							OperationTarget="numeric.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196276"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>

						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_palette.ch0.vmd1_sco_0"
							OperationTarget="numeric_palette.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196292"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_brightness.ch0.vmd1_sco_0"
							OperationTarget="numeric_brightness.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196293"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Effect_Speed.ch0.vmd1_sco_0"
							OperationTarget="numeric_Effect_Speed.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196294"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Effect_Intensity.ch0.vmd1_sco_0"
							OperationTarget="numeric_Effect_Intensity.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196295"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric_Function_Selector.ch0.vmd1_sco_0"
							OperationTarget="numeric_Function_Selector.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196301"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						

						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="enumstring.ch0.vmd1_sco_0"
							OperationTarget="enumstring.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196277"> <!-- 2:65.205 -->
								<pm:ConceptDescription Lang="en-US">set enum string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>

						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string.ch0.vmd1_sco_0"
							OperationTarget="string.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196278"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">set string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string_2.ch0.vmd1_sco_0"
							OperationTarget="string_2.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196279"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">set string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string_3.ch0.vmd1_sco_0"
							OperationTarget="string_3.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT2S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196280"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">set string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						
					</pm:Sco>
					<!-- this is the channel grouping the settable metrics -->
					<pm:Channel Handle="ch0.vmd1"
						SafetyClassification="MedA">
						<pm:Type Code="130737"> <!-- 1:65.201 -->
							<pm:ConceptDescription Lang="en-US">settable metrics</pm:ConceptDescription>
						</pm:Type>
						<pm:Metric Handle="numeric.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196274"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="101" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="numeric_palette.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196280"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262680"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="46" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="numeric_brightness.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196290"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262691"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>
							<pm:Metric Handle="numeric_Effect_Speed.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196280"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262660"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>

						<pm:Metric Handle="numeric_Effect_Intensity.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196281"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262661"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="255" Lower="0"
								StepWidth="1" />
						</pm:Metric>
						<pm:Metric Handle="enumstring.ch0.vmd1"
							SafetyClassification="MedA"
							xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Set"
							MetricAvailability="Intr">
							<pm:Type Code="196275"> <!-- 2:65.203 -->
								<pm:ConceptDescription Lang="en-US">dummy settable enum string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:AllowedValue>
								<pm:Value>ON</pm:Value>
								<pm:Type Code="192834">
									<pm:ConceptDescription Lang="en-US">ON</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
							<pm:AllowedValue>
								<pm:Value>OFF</pm:Value>
								<pm:Type Code="192835">
									<pm:ConceptDescription Lang="en-US">OFF</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
						</pm:Metric>

						<pm:Metric Handle="string.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="196276"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">dummy settable string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="string_2.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="196282"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">dummy settable string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262672"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="string_3.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="196283"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">dummy settable string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262673"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
						<pm:Metric Handle="numeric_Function_Selector.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196300"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262301"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="7" Lower="0"
								StepWidth="1" />
						</pm:Metric>
					</pm:Channel>
				</pm:Vmd>
			</pm:Mds>
		</pm:MdDescription>
	</msg:Mdib>
</msg:GetMdibResponse>